Key	Value
CellProfiler_Version	4.2.1
ChannelType_multichannel	Color
Default_InputFolder	/Users/wtf
Default_OutputFolder	/Users/wtf/Murai Lab Cloud Dropbox/Todd_Farmer-Team_Folder/Projects_Todd/vessel_quant/results
ImageSet_Zip_Dictionary	b'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'
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:multichannel
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:multichannel
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:GFAP
    Channel number:2
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    Image name:tdTomato
    Channel number:3
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    Image name:Kir4.1
    Channel number:4
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    Image name:Sox9

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify Cells']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
    Select the input image:tdTomato
    Name the primary objects to be identified:Astros
    Typical diameter of objects, in pixel units (Min,Max):30,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
Threshold:[module_num:7|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
    Select the input image:Sox9
    Name the output image:Threshold _Sox9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify Nuclei']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
    Select the input image:Threshold _Sox9
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.001,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

RelateObjects:[module_num:9|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
    Parent objects:Astros
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:10|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
    Parent objects:Nuclei
    Child objects:Astros
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:11|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
    Select images to measure:GFAP, Kir4.1
    Select objects to measure:Astros

OverlayObjects:[module_num:12|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
    Input:GFAP
    Name the output image:OverlayNuclei
    Objects:Nuclei
    Opacity:0.3

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:Yes
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    Name the output image:astro_objects
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:Astros
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    Select objects to display:Nuclei

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OverlayNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:multichannel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Murai Lab Cloud Dropbox/Todd_Farmer-Team_Folder/Projects_Todd/astro_quant_inVitro_wSabrina/results
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:astro_objects
    Select method for constructing file names:From image filename
    Select image name for file prefix:multichannel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_lines
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Murai Lab Cloud Dropbox/Todd_Farmer-Team_Folder/Projects_Todd/astro_quant_inVitro_wSabrina/results
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Murai Lab Cloud Dropbox/Todd_Farmer-Team_Folder/Projects_Todd/astro_quant_inVitro_wSabrina
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Threshold_SumOfEntropies_Astros,Image|Threshold_SumOfEntropies_Nuclei,Image|Threshold_SumOfEntropies_Threshold _Sox9,Image|Threshold_WeightedVariance_Nuclei,Image|Threshold_WeightedVariance_Astros,Image|Threshold_WeightedVariance_Threshold _Sox9,Image|Threshold_OrigThreshold_Nuclei,Image|Threshold_OrigThreshold_Astros,Image|Threshold_OrigThreshold_Threshold _Sox9,Image|Threshold_FinalThreshold_Threshold _Sox9,Image|Threshold_FinalThreshold_Nuclei,Image|Threshold_FinalThreshold_Astros,Image|Threshold_GuideThreshold_Nuclei,Image|ModuleError_14SaveImages,Image|ModuleError_04Groups,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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"
Run_Timestamp	2022-10-11T16:09:25.031879
